<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId>1</p1:DeviceId>
          <p1:ConfigFile>2048x2048_10fps_slowClock_4.92.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>10</cv:BackgroundFrames>
          <cv:AdaptationRate>0.01</cv:AdaptationRate>
          <cv:ThresholdValue>15</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>35</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:RunningAverage">
          <dsp:Alpha>1</dsp:Alpha>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>800</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>SortContours</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("Bonsai.Vision")
from Bonsai.Vision import ConnectedComponent
from System.Collections.Generic import IList
from System import Tuple

@returns(IList[ConnectedComponent])

def process(value):

  tupRoundAll=[]
  for c in value:

    y=c.Centroid.Y
    yr=(int(y/400)*400)
    x=c.Centroid.X
    xr=(int(x/400)*400)
    
    tupRoundAll.append((yr,xr))
  
  so=[i[0] for i in sorted(enumerate(tupRoundAll), key=lambda x:x[1])]

  s=[value[i] for i in so]

  return s</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>ROI File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>E:\00_bonsai_ffmpeg_out\ROIdef2024-10-21T19_20_34.csv</io:FileName>
              <io:ScanPattern>%i %i %i %i %i %i</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToList" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ImageSize</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr
clr.AddReference("OpenTK")
clr.AddReference("OpenCV.Net")
from System.Collections.Generic import IList
from OpenCV.Net import CV, Point2f, Mat,Depth

from OpenTK import Vector2, Vector3
from System import Array, Single, Random,Tuple


dlOld=[]
dl=[]

@returns(Tuple[str,str,Tuple[int,int]])
def process(value):
  global dlOld,dl
  allwells=[]
  detected=value.Item1
  projected=value.Item2

  #ppl=[8,12,22,26]#[0,4,10,14]
  ppl=[0,2,6,8]

  pl=[]
  boxWidth=(projected[0].Item3/2)

  for p in ppl:
    x=projected[p].Item1+boxWidth
    y=projected[p].Item2+boxWidth

    ds=3/5.
    dsh=2000/5.
    
    x=x*ds+dsh
    y=y#*ds+dsh

    pl.append([x,y])

  try:

    dpl=[0,1,2,3]
    
    dlOld=dl
    dl=[]
    for d in dpl:
      x=detected[d].Centroid.X
      y=detected[d].Centroid.Y
      dl.append([int(x),int(y)])

  except:
    dl=dlOld
    #print 'hello'
      

  try:
    for i in dpl:
      welldata = (pl[i][0],pl[i][1],dl[i][0],dl[i][1])
      wellstr = "%i %i %i %i" % welldata
      allwells.append(wellstr)
    
  except:
    allwells=""

  v=" ".join(allwells)
  sAll=[]
  try:
    a=[int(x) for x in v.split()]
    b=Array[Point2f]([Point2f(a[0],a[1]),Point2f(a[4],a[5]),Point2f(a[8],a[9]),Point2f(a[12],a[13])])
    c=Array[Point2f]([Point2f(a[2],a[3]),Point2f(a[6],a[7]),Point2f(a[10],a[11]),Point2f(a[14],a[15])])
    values = Array[float]([1,1,1,1,1,1,1,1,1])

    h = Mat.FromArray(values, 3, 3, Depth.F64, 1)

    CV.GetPerspectiveTransform(c,b,h)

    
    for i in range(3):
      for j in range(3):
        va=float(h.Item[i*3+j].Val0)
        da=(va)
        s = "%0.8f" % da
        sAll.append(s) 
  except:
    pass
  return Tuple.Create(" ".join(sAll),v,Tuple.Create(value.Item3.Width,value.Item3.Height))
  #except:
   # return ""

def unload():
  global dlOld,dl
  dlOld=None
  dl=None</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Keys">
          <Value>A</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\00_bonsai_ffmpeg_out\calibrationOut.csv</io:FileName>
        <io:Delimiter> </io:Delimiter>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Equal" />
      <Expression xsi:type="MemberSelector">
        <Selector>Item1,Item3</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr
clr.AddReference("OpenTK")
from OpenTK import Vector2, Vector3
from System import Array, Tuple
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

def transf(x,y,s):
  values = Array[float]([float(el) for el in s.split()])

  h = Mat.FromArray(values, 3, 3, Depth.F64, 1)

  values1 = Array[float]([x,y])
  values2 = Array[float]([1,1])

  point = Mat.FromArray(values1, 1, 1, Depth.F64,2)
  out = Mat.FromArray(values2, 1, 1, Depth.F64,2)

  CV.PerspectiveTransform(point,out,h)

  x=out.Item[0].Val0
  y=out.Item[0].Val1

  return x,y


@returns(Array[Vector3])
def process(value):

  allwells=[]

  #wellList=[8,12,22,26]#[0,4,10,14]
  wellList=[0,2,6,8]


  posList=[]

  for w in wellList:
    well=value.Item1[w]


    x = (well.Item1+well.Item3/2)
    y = (well.Item2+well.Item3/2)

    ds=3/5.
    dsh=2000/5.
    
    x=x*ds+dsh
    y=y#*ds+dsh

    w=float(value.Item3.Item2.Item1)
    h=float(value.Item3.Item2.Item2)

    allwells.append(Vector3(2*(x-w/2.)/w,-2*(y-h/2.)/h,float(25)))

    s=value.Item3.Item1
    if len(s)&gt;1:
      xt,yt=transf(x,y,s)
      allwells.append(Vector3(2*(xt-w/2.)/w,-2*(yt-h/2.)/h,float(5)))

    

  ar=Array[Vector3](allwells)
  return ar</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawArrays">
          <gl:ShaderName>Particles</gl:ShaderName>
          <gl:DrawMode>Points</gl:DrawMode>
          <gl:Usage>DynamicDraw</gl:Usage>
          <gl:VertexAttributes>
            <gl:VertexAttributeMapping>
              <gl:Size>3</gl:Size>
              <gl:Normalized>false</gl:Normalized>
              <gl:Type>Float</gl:Type>
            </gl:VertexAttributeMapping>
          </gl:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1280</gl:Width>
          <gl:Height>800</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Transparent</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>60</gl:TargetUpdateFrequency>
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>Blend</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>SrcAlpha</gl:SourceFactor>
              <gl:DestinationFactor>OneMinusSrcAlpha</gl:DestinationFactor>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>PointSprite</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>ProgramPointSize</gl:Capability>
            </gl:StateConfiguration>
          </gl:RenderState>
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>Particles</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms>
                <gl:UniformConfiguration xsi:type="gl:Vec4Uniform">
                  <gl:Name>color</gl:Name>
                  <gl:Value>
                    <gl:X>0</gl:X>
                    <gl:Y>0</gl:Y>
                    <gl:Z>0</gl:Z>
                    <gl:W>1</gl:W>
                  </gl:Value>
                </gl:UniformConfiguration>
              </gl:ShaderUniforms>
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>particles.vert</gl:VertexShader>
              <gl:FragmentShader>particles.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source2" />
      <Edge From="9" To="29" Label="Source1" />
      <Edge From="10" To="11" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="12" To="27" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="29" Label="Source2" />
      <Edge From="27" To="29" Label="Source3" />
      <Edge From="28" To="29" Label="Source4" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="33" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>