<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:Bonsai.joh.Vision;assembly=BonsaiPackage5"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId>1</p1:DeviceId>
          <p1:ConfigFile>getCircles\2048x1380_30fps_slowClock_4.9.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>120</cv:BackgroundFrames>
          <cv:AdaptationRate>0.001</cv:AdaptationRate>
          <cv:ThresholdValue>9</cv:ThresholdValue>
          <cv:ThresholdType>ToZero</cv:ThresholdType>
          <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>ffmpeg</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="vid fps" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Script>import datetime
@returns(str)
def generate():
  currentTime=datetime.datetime.now()
  yield currentTime.strftime('%Y%m%d%H%M%S')</ipy:Script>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cam id" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="codec q" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Height</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import subprocess as sp
import datetime

@returns(bool)
def process(inputs):

  vid_width=str(inputs.Item5)
  vid_height=str(inputs.Item6)
  vid_rate=str(inputs.Item1)
  currentTime=inputs.Item2
  cam_id=str(inputs.Item3)
  codec_q=str(inputs.Item4)

  #cmd='c:\\ffmpeg\\bin\\ffmpeg.exe -y -f rawvideo -vcodec rawvideo -s '+vid_width+'x'+vid_height+' -r '+vid_rate+' -pix_fmt gray -i \\\\.\\pipe\\p1 -q:v '+codec_q+' -vcodec mpeg4 -vtag xvid c:\\00_bonsai_ffmpeg_out\\out_id'+cam_id+'_'+vid_rate+'fps'+'_'+currentTime+'.avi'

  cmd='c:\\ffmpeg\\bin\\ffmpeg.exe -y -f rawvideo -vcodec rawvideo -s '+vid_width+'x'+vid_height+' -r '+vid_rate+' -pix_fmt gray -i \\\\.\\pipe\\p1 -q:v '+codec_q+' -vcodec mpeg4 -vtag xvid e:\\00_bonsai_ffmpeg_out\\out_id'+cam_id+'_'+vid_rate+'fps'+'_'+currentTime+'.avi'
  sp.Popen(cmd)
  return True</ipy:Script>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="11" Label="Source2" />
            <Edge From="4" To="11" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="11" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source5" />
            <Edge From="9" To="11" Label="Source6" />
            <Edge From="10" To="11" Label="Source7" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\p1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>14</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="p1:uEyeCapture,sys:String">
        <MemberName>ConfigFile</MemberName>
        <Value>getCircles\2048x2048_30fps_slowClock_4.92.ini</Value>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>trajectory file</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>E:\00_bonsai_ffmpeg_out\trajectories\MP\2025.05.10\2025.05.10-1218_GsizeMotionChoice_278min.csv</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%s</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="io:CsvReader,sys:String">
        <MemberName>FileName</MemberName>
        <Value>E:\00_bonsai_ffmpeg_out\trajectories\trajectories_35wellPlate_BoutTuning_abs.csv</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>experiment parameters</Name>
        <Description>smooth orientation values (default:3) ROImm default: 100</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="smooth" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="ROI_file" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ROI_mm" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>150</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>ROI file</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>E:\00_bonsai_ffmpeg_out\ROIdef2025-05-10T13_03_52.csv</io:FileName>
                    <io:ScanPattern>%i,%i,%i,%i,%i,%i</io:ScanPattern>
                    <io:SkipRows>0</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>150</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Divide" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="10" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="4" To="10" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:CsvReader,sys:String">
              <MemberName>FileName</MemberName>
              <Value>E:\00_bonsai_ffmpeg_out\ROIdef2020-02-27T16_48_09.csv</Value>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="calibration file" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>calibration file</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>E:\00_bonsai_ffmpeg_out\calibrationOut2025-05-10T14_05_12.csv</io:FileName>
                    <io:ScanPattern>%s</io:ScanPattern>
                    <io:SkipRows>0</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>split_hMat</ipy:Name>
                    <ipy:Script>from System import Array
@returns(Array)
def process(value):
  return Array[float]([float(el) for el in value.split()])</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:CsvReader,sys:String">
              <MemberName>FileName</MemberName>
              <Value>E:\00_bonsai_ffmpeg_out\ROIdef2020-02-27T16_48_09.csv</Value>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="pair list" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>pairList</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>E:\00_bonsai_ffmpeg_out\pairLists\MP\PL18_12dots</io:FileName>
                    <io:ScanPattern>%s</io:ScanPattern>
                    <io:SkipRows>0</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>splitPairList</ipy:Name>
                    <ipy:Script>@returns(list)
def process(value):
  pairList=[]
  for l in value:
    pairList.append([int(x) for x in l.split()])
  return pairList</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:CsvReader,sys:String">
              <MemberName>FileName</MemberName>
              <Value>E:\00_bonsai_ffmpeg_out\ROIdef2020-02-27T16_48_09.csv</Value>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="camHeight file" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>camHeight</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>C:\Users\Experimenter\Documents\00_work\demovideos\35Animals\camHeight.csv</io:FileName>
                    <io:ScanPattern>%s</io:ScanPattern>
                    <io:SkipRows>0</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>splitCamList</ipy:Name>
                    <ipy:Script>import os
from System import Tuple
import datetime

@returns(Tuple[int,str])
def process(value):
  CamList=[]
  for l in value:
    CamList.append([x for x in l.split()])

  pcName=os.environ['COMPUTERNAME']
  currentTime=datetime.datetime.now().strftime('%Y%m%d%H%M%S')

  

  camHeight=-1
  for c in CamList:
    if c[0]==pcName:
      camHeight=int(c[1])

  saveSet=[currentTime,pcName,str(camHeight)+" "]
  return Tuple.Create(camHeight," ".join(saveSet))


  </ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Size</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="21" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="21" Label="Source4" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="21" Label="Source6" />
            <Edge From="9" To="16" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="10" To="19" Label="Source1" />
            <Edge From="11" To="16" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="21" Label="Source5" />
            <Edge From="14" To="16" Label="Source4" />
            <Edge From="15" To="16" Label="Source5" />
            <Edge From="16" To="21" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source3" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source7" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Item4.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="RegionOfInterest" Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item3" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1381</cv:X>
                  <cv:Y>741</cv:Y>
                  <cv:Width>538</cv:Width>
                  <cv:Height>538</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>4</cv:MinArea>
                <cv:MaxArea>500</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:HeadingFromOrientation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="12" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import sys
import clr
clr.AddReference("OpenTK")
from OpenTK import Vector3
from System import Array, Tuple, Single

sys.path.append('C:\\Users\\Experimenter\\Documents\\bonsai_zfshoaling\\python')
#sys.path.append('C:\\Users\\baierlab\\Documents\\bonsai_zfshoaling\\python')
#sys.path.append('C:\\Users\\jlarsch\\Documents\\bonsai_zfshoaling\\python')
import CameraInterceptCorrection as cic
import runAvgList as rAL
import geometry as geo
import skypeShoal as sS
import math

allCoor=[]
oldCoor=[]
posList=[]
oldHead=[]
fr=0
smoo=3

@returns(Tuple[str,Array[Vector3],Tuple[Single,Single],str,str,Tuple[bool,Single,Single,Single,str],list])
def process(value):
  global allCoor,oldCoor,fr,posList,oldHead

  #print('new frame')
  xMax = float(value.Item1.Item2.Item7.Width) # video dimensions, relevant to openGL stimulus scaling
  yMax = float(value.Item1.Item2.Item7.Height)
  bgCol = 1.#value.Item2.Item5 # color of stimulus background
  DotCol = 0.#value.Item2.Item6 # color of dot stimuli
  sp = 4.# value.Item2.Item4  # sprite point size
  hArr =value.Item1.Item2.Item6 #projector-camera calibration matrix
  pxPmm=value.Item1.Item2.Item4.Item3

  #Use episode number to infer stimulation mode.
  #eName = 'continuous'#value.Item2.Item1
  eName = value.Item2.split(',')[0]
#allAns=value.Item2.split(',')
  grat=eName[:4]=='grat' # grating mode
  CL = eName[:2]=='CL'
  #CL = eName[3:8]=='pairs'

  if CL: # closed loop mode
    FlexPair=False
    CLmode=eName[2:6]=='full' # this should be semi:0 or full:1
    #semi: anchor stimulus position to animal position at defined frame but don't update with subsequent animal motion.
    #full: keep anchoring stimulus position to animal position.
    if CLmode:
      posPick=1
    else:
      #print('entering semi closed loop, eName',eName, 'piece:', eName[6:9])
      posPick=int(eName[6:10]) # time interval (frames) for anchoring stimuli in semi CL mode.
      #print(str(posPick))
  
  
  FlexPair=eName[3:8]=='pairs'

  # generate string to save as experiment parameters not part of position output.
  saveSettings=[str(CL),str(FlexPair),str(xMax),str(yMax),str(smoo),str(pxPmm)]
  #print(eName,grat)

  if grat:
    contrast=Single(float(eName[4:7])/100.)
    freq=Single(float(eName[7:10]))
    speed=Single(float(eName[10:13]))
    LR=eName[13]
    #print(len(allheading),allheading[1])
  else:
    contrast=Single(1.)
    speed=Single(1.)
    freq=Single(1.)
    LR=None
  
  
  #print('getPairList')
  pairList=sS.getPairList(value, FlexPair) #animal pair matrix
  
  # get current animal positions in list and str format
  #print('getAnimalCoors')
  allCoor, allwells=sS.getAnimalCoors(value,allCoor)
  #print('AnimalCoors done')

  if CL:
    if fr==0:
      posList=allCoor
    fr+=1
    if fr==posPick:
      fr=0

  toDraw=[]
  drawStr=[]
  allheading=[]

  for i,p in enumerate(allCoor):

    if LR=='L':
      allheading.append(p[4]+math.pi/2.)
    else:
      allheading.append((p[4]-math.pi)+math.pi/2.)
    #p: point to be drawn (unless in skype mode, ones should only be in i=15 or 35 (last animal)
    l=pairList[i] #find where to draw it (which dish)
    for ii,pp in enumerate(l):

      if pp==1: #draw into dish ii

        if CL: # for 'closed loop', place stimuli relative to defined position
          
          x,y=sS.CLstim(value,allCoor,posList,p,ii,CLmode)
          sp=p[4]
          if x == 0:
            #allwells[i] = allwells[i] + '_f'+str(ii)+'o'
            sp=0
          else:
            sp=p[4]
          #print('cl ',x,y)
        else:
          x=p[0]+allCoor[ii][2] #add offsets of current dish
          y=p[1]+allCoor[ii][3]

          #use default size = 4 for all animal pairing stimuli.
          #use variable size from stimulus file (p[4]) for all subsequent stimuli from stimulus file
          numArenas=len(value.Item1.Item1) # number of ROIs
          if i&gt;=numArenas:
            sp=p[4]
          else:
            sp=4.
        
        wellStr = "%d %d" % (round(x),round(y))
        drawStr.append(wellStr)
        x,y=geo.transf(x,y,hArr) ##projector-camera calibration
        x=geo.toGL(x,xMax) # transform to openGL coordinates
        y=-geo.toGL(y,yMax)
        toDraw.append([x,y,sp]) 
        #wellStr = "%.2f %.2f" % (x,y)
        #drawStr.append(wellStr)
  ar=sS.listToTkArray(toDraw)
  #print(" ".join(drawStr))
  # smooth heading.
  # Only applies to allheading - used for CL stim presentation and gratings to reduce jitter
  if smoo&gt;0: 
    allheading,oldHead= rAL.runAvgList(oldHead,allheading,smoo,threshold=3)

  #print(allheading[0])
  return Tuple.Create(" ".join(allwells),ar,Tuple.Create(Single(bgCol),Single(DotCol))," ".join(drawStr)," ".join(saveSettings),Tuple.Create(grat,contrast,speed,freq,eName),allheading)

def unload():
  global allCoor,oldCoor,fr,posList
  allCoor=None
  oldCoor=None
  fr=None
  posList=None</ipy:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>e:\00_bonsai_ffmpeg_out\PositionTxt_allROI.csv</io:FileName>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>Blend</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>SrcAlpha</gl:SourceFactor>
              <gl:DestinationFactor>OneMinusSrcAlpha</gl:DestinationFactor>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:DepthFunctionState">
              <gl:Function>Lequal</gl:Function>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>Multisample</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>PolygonSmooth</gl:Capability>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>GLdraw</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DrawArrays">
                <gl:ShaderName>Particles</gl:ShaderName>
                <gl:DrawMode>Points</gl:DrawMode>
                <gl:Usage>DynamicDraw</gl:Usage>
                <gl:VertexAttributes>
                  <gl:VertexAttributeMapping>
                    <gl:Size>3</gl:Size>
                    <gl:Normalized>false</gl:Normalized>
                    <gl:Type>Float</gl:Type>
                  </gl:VertexAttributeMapping>
                </gl:VertexAttributes>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>colBG</gl:UniformName>
                <gl:ShaderName>Particles</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>colBG</gl:UniformName>
                <gl:ShaderName>bg</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>colDot</gl:UniformName>
                <gl:ShaderName>Particles</gl:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SaveSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3.Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item5</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>False False 2048.0 1380.0 3 3.57111111111</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(str)
def process(value):

  
  return value.Item1+" " + " ".join(value.Item2)</ipy:Script>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\00_bonsai_ffmpeg_out\saveSettings.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>it</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item6,Item7</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>drawGrating</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Item1.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3.Item4.Item1,Item3.Item4.Item2,Item1.Item2,Item3.Item7,Item3.Item6</Selector>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenTK")
from OpenTK import Vector2, Vector3
from System import Array, Single, Random,Tuple
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *



def transf(x,y,hArr):

  h = Mat.FromArray(hArr, 3, 3, Depth.F64, 1)

  values1 = Array[float]([x,y])
  values2 = Array[float]([1,1])

  point = Mat.FromArray(values1, 1, 1, Depth.F64,2)
  out = Mat.FromArray(values2, 1, 1, Depth.F64,2)

  CV.PerspectiveTransform(point,out,h)

  x=out.Item[0].Val0
  y=out.Item[0].Val1

  return x,y

@returns(Mat)
def process(value):

  xMax=float(value.Item4.Width)#2048.0 #relevant for openGL scaling
  yMax=float(value.Item4.Height)#1380.0

  ROIradius=value.Item2/float(2)

  hArr =value.Item5


  x = [r.Item4 for r in value.Item1] #ROI positions
  y = [r.Item5 for r in value.Item1]

  for i in range(len(x)):
    
    
    
    x[i]=x[i]-(x[i]-xMax/2.)/(ROIradius)
    y[i]=y[i]-(y[i]-yMax/2.)/(ROIradius)
    x[i],y[i]=transf(x[i],y[i],hArr)
    x[i]=(2*(x[i]-xMax/2))/xMax
    y[i]=(-2*(y[i]-yMax/2))/yMax

  
  xyh=sum(zip(x, y,value.Item3), ())  # valueItem3=allHeading
  tmpAll=[]
  for i in range(len(x)):
    tmpAll.append([x[i],y[i],value.Item3[i]])
    #if i==0:
      #print(tmpAll[-1])

  #xyhA=Array[Vector3]([Vector3(x[0], x[1], x[2]) for x in tmpAll])
  

  xyhA = Array[float](xyh)


  xyhm = Mat.FromArray(xyhA, len(value.Item1), 3, Depth.F64, 1)

  return xyhm</ipy:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateVertexBuffer">
                <gl:MeshName>Waveform</gl:MeshName>
                <gl:DrawMode>Points</gl:DrawMode>
                <gl:Usage>DynamicDraw</gl:Usage>
                <gl:VertexAttributes>
                  <gl:VertexAttributeMapping>
                    <gl:Size>3</gl:Size>
                    <gl:Normalized>false</gl:Normalized>
                    <gl:Type>Double</gl:Type>
                  </gl:VertexAttributeMapping>
                </gl:VertexAttributes>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>contrast</gl:UniformName>
                <gl:ShaderName>Waveform</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>single(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>phase</gl:UniformName>
                <gl:ShaderName>Waveform</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DrawMesh">
                <gl:ShaderName>Waveform</gl:ShaderName>
                <gl:MeshName>Waveform</gl:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item4</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>frequency</gl:UniformName>
                <gl:ShaderName>Waveform</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="GratingSize" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.755813956</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>sc</gl:UniformName>
                <gl:ShaderName>Waveform</gl:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="12" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="9" To="21" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\00_bonsai_ffmpeg_out\StimOut.csv</io:FileName>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1280</gl:Width>
          <gl:Height>800</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>White</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>60</gl:TargetUpdateFrequency>
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>Blend</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>SrcAlpha</gl:SourceFactor>
              <gl:DestinationFactor>OneMinusSrcAlpha</gl:DestinationFactor>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>PointSprite</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>ProgramPointSize</gl:Capability>
            </gl:StateConfiguration>
          </gl:RenderState>
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration>
              <gl:Name>Waveform</gl:Name>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>Particles</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>particles.vert</gl:VertexShader>
              <gl:FragmentShader>particles.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>Waveform</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>waveformSelf.vert</gl:VertexShader>
              <gl:GeometryShader>waveform_self.geom</gl:GeometryShader>
              <gl:FragmentShader>grating.frag</gl:FragmentShader>
              <gl:MeshName>Waveform</gl:MeshName>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>bg</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>bg.vert</gl:VertexShader>
              <gl:FragmentShader>bg.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="5" To="11" Label="Source1" />
      <Edge From="6" To="9" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="13" Label="Source2" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="10" To="21" Label="Source1" />
      <Edge From="10" To="24" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="22" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="19" Label="Source1" />
      <Edge From="14" To="21" Label="Source2" />
      <Edge From="14" To="23" Label="Source1" />
      <Edge From="14" To="28" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="18" To="24" Label="Source2" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>