<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId xsi:nil="true" />
          <p1:ConfigFile>C:\Users\Experimenter\Documents\bonsai_zfshoaling\2048x1380_30fps_slowClock_4.92.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Keys">
          <Value>A</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:RunningAverage">
          <dsp:Alpha>0.05</dsp:Alpha>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HoughCircles">
          <cv:AccumulatorFactor>20</cv:AccumulatorFactor>
          <cv:MinDistance>240</cv:MinDistance>
          <cv:Param1>50</cv:Param1>
          <cv:Param2>100</cv:Param2>
          <cv:MinRadius>110</cv:MinRadius>
          <cv:MaxRadius>150</cv:MaxRadius>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>from System import Tuple
@returns(Tuple[int,int,int,int,int,int])
def process(value):

  xc= int(value.Center.X)
  yc= int(value.Center.Y)
  r = int(value.Radius)
  x = xc-(r+2)
  y = yc-(r+2)
  wh=(r+2)*2

  return Tuple.Create(x,y,wh,xc,yc,r)</ipy:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>32</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>from System import Tuple
from System.Collections.Generic import IList

@returns(IList[Tuple[int,int,int,int,int,int]])
def process(value):

  tupAll=[]
  tupRoundAll=[]
  for c in value:
    x=c.Item1
    xr=(x/180)*180
    y=c.Item2
    yr=(y/180)*180
    w=c.Item3
    xc=c.Item4
    yc=c.Item5
    r=c.Item6
    
    tupAll.append((x,y,w,xc,yc,r))
    tupRoundAll.append((yr,xr))
  
  so=[i[0] for i in sorted(enumerate(tupRoundAll), key=lambda x:x[1])]

  s=[tupAll[i] for i in so]

  return [Tuple.Create(x[0],x[1],x[2],x[3],x[4],x[5]) for x in s]</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>from System import Tuple
@returns(Tuple[int,int])
def process(value):

  x = int(value.Item1)
  y = int(value.Item2)

  return Tuple.Create(x,y)</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>120</cv:BackgroundFrames>
          <cv:AdaptationRate>0.001</cv:AdaptationRate>
          <cv:ThresholdValue>0</cv:ThresholdValue>
          <cv:ThresholdType>ToZero</cv:ThresholdType>
          <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>18</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\00_bonsai_ffmpeg_out\ROIdef.csv</io:FileName>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="15" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="19" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>